PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1200, 800]
  expName = Delay_Discounting_Task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        You will be seeing two choices on the screen, where you can either receive a certain amount of money today or another certain amount of money tomorrow. The money is in GBP meaning Great Britain Pound.

        Press "T" if you choose to recieve the money today
        Press "L" if you choose to recieve the money later

        Press "SpaceBar" to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your valuable contribution!
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 22.42, 'future_reward': 84.16, 'delay': 7},
      {'reward_today': 13.51, 'future_reward': 55.72, 'delay': 58},
      {'reward_today': 40.13, 'future_reward': 72.12, 'delay': 13},
      {'reward_today': 68.98, 'future_reward': 122.75, 'delay': 110},
      {'reward_today': 32.02, 'future_reward': 146.32, 'delay': 54},
      {'reward_today': 39, 'future_reward': 91.32, 'delay': 16},
      {'reward_today': 91.3, 'future_reward': 163.18, 'delay': 17},
      {'reward_today': 77.97, 'future_reward': 168.28, 'delay': 70},
      {'reward_today': 54.02, 'future_reward': 110.38, 'delay': 56},
      {'reward_today': 86.29, 'future_reward': 203.47, 'delay': 91},
      {'reward_today': 68.11, 'future_reward': 184.36, 'delay': 91},
      {'reward_today': 75.02, 'future_reward': 120.2, 'delay': 82},
      {'reward_today': 99.69, 'future_reward': 169.41, 'delay': 66},
      {'reward_today': 52.77, 'future_reward': 102.86, 'delay': 53},
      {'reward_today': 64.45, 'future_reward': 112.94, 'delay': 92},
      {'reward_today': 100.49, 'future_reward': 124.18, 'delay': 138},
      {'reward_today': 96.19, 'future_reward': 177.15, 'delay': 125},
      {'reward_today': 136.34, 'future_reward': 206.61, 'delay': 89},
      {'reward_today': 112.75, 'future_reward': 137.9, 'delay': 138},
      {'reward_today': 107.12, 'future_reward': 154.98, 'delay': 152},
      {'reward_today': 186.04, 'future_reward': 296.86, 'delay': 120},
      {'reward_today': 150.72, 'future_reward': 194.68, 'delay': 159},
      {'reward_today': 165.02, 'future_reward': 199.51, 'delay': 163},
      {'reward_today': 134.68, 'future_reward': 203.63, 'delay': 134}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
    Routine trial
  LoopTerminator trials
  Routine thanks
