PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Motor_Sequence_Learning
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine intro
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        You will see 4 rectangles and a triangle will appear on top of any one rectangle.
        Your task is to
        Press Z if the triangle is on top of the first rectangle
        Press X if the triangle is on top of the second rectangle
        Press C if the triangle is on top of the third rectangle
        Press V if the triangle is on top of the fourth rectangle

        Press "Space" to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your valuable contribution!
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  Routine trial_rand
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    PolygonComponent fixation1
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line_1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probee
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp_3
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sequence_con.csv
    loopType = sequential
    nReps = 10
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = sequence_con.csv
    loopType = fullRandom
    nReps = 10
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine trial_rand
  LoopTerminator trials_2
  Routine thanks
