PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 600]
  expName = adaptive_staircase
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent fiftyfifty
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            direction = -level
            corr_resp = 'left'
        else:
            direction = level
            corr_resp = 'right'
      End Routine:
        thisExp.addData('corrAns', corr_resp)
        thisExp.addData('tilt', direction)
        thisExp.addData('key_resp.corr', key_resp.corr)
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    GratingComponent grating
      contrast = 0.5
      mask = gauss
      ori [set every repeat] = direction
      sf = 8
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine intro
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        You will see a shaded circle which would either be tilted towards the right or the left.

        If it is tilted towards the left, press the 'left arrow key'
        If it is tilted towards the right, press the 'right arrow key'

        Press spacebar to move on the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for your time and valuable contribution!
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Flow
  Routine intro
  LoopInitiator stair loopType="StairHandler"
    N down = 3
    N up = 1
    loopType = staircase
    max value = 20
    min value = 1
    nReps = 100
    start value = 10
    step sizes = [2,1,1,0.5]
    step type = lin
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    Routine trial
  LoopTerminator stair
  Routine thanks
