PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = word_priming
  keyboardBackend = ioHub
  runMode = 1
  rush = True
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine instruction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In the first part of the experiment, rate the words that are displayed based on how familiar you feel the words are.

        In the second half of the experiment, you will have to type out the words based on the incomplete blanks that you see.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = $submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'Book'},
      {'study_word': 'Cushion'},
      {'study_word': 'Phone'},
      {'study_word': 'Marble'},
      {'study_word': 'Board'},
      {'study_word': 'Laptop'},
      {'study_word': 'Chart'},
      {'study_word': 'T-shirt'},
      {'study_word': 'Mouse'},
      {'study_word': 'Pastry'},
      {'study_word': 'Case'},
      {'study_word': 'Cruise'},
      {'study_word': 'Police'},
      {'study_word': 'Keys'},
      {'study_word': 'Poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'reference': 'laptop', 'old_new': 'old'},
      {'test_word': '_ha_t', 'reference': 'chart', 'old_new': 'old'},
      {'test_word': 't_hi_t', 'reference': 'tshirt', 'old_new': 'old'},
      {'test_word': '_o_se', 'reference': 'mouse', 'old_new': 'old'},
      {'test_word': 'pa_tr_', 'reference': 'pastry', 'old_new': 'old'},
      {'test_word': 'c_s_', 'reference': 'case', 'old_new': 'old'},
      {'test_word': '_ru_s_', 'reference': 'cruise', 'old_new': 'old'},
      {'test_word': 'p_li_e', 'reference': 'police', 'old_new': 'old'},
      {'test_word': 'k_y_', 'reference': 'keys', 'old_new': 'old'},
      {'test_word': 'p_st_r', 'reference': 'poster', 'old_new': 'old'},
      {'test_word': '_o_rd', 'reference': 'board', 'old_new': 'old'},
      {'test_word': '_a_bl_', 'reference': 'marble', 'old_new': 'old'},
      {'test_word': '_ho_e', 'reference': 'phone', 'old_new': 'old'},
      {'test_word': '_oo_', 'reference': 'book', 'old_new': 'old'},
      {'test_word': 'c_s_io_', 'reference': 'cushion', 'old_new': 'old'},
      {'test_word': 'ta_l_', 'reference': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'reference': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'reference': 'vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'reference': 'bottle', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'reference': 'camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
